PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  color = -1.0000, -1.0000, -1.0000
  expName = EditedExp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from random import shuffle
        from pathlib import Path

        # Path to your stimuli folder
        image_folder = Path('stimuli')

        # Get all images from all emotion folders
        image_list = list(image_folder.glob('happiness/*.jpg')) + \
                     list(image_folder.glob('sadness/*.jpg')) + \
                     list(image_folder.glob('anger/*.jpg')) + \
                     list(image_folder.glob('fear/*.jpg'))

        # Shuffle order
        shuffle(image_list)

        # Convert to strings
        image_paths = [str(f) for f in image_list]

        # Define balanced pairings
        pairings = {
            'happiness': ['sadness']*6 + ['anger']*5 + ['fear']*5,
            'sadness': ['happiness']*5 + ['anger']*6 + ['fear']*5,
            'anger': ['happiness']*5 + ['sadness']*5 + ['fear']*6,
            'fear': ['happiness']*6 + ['sadness']*5 + ['anger']*5
        }

        # Shuffle each list
        for emotion in pairings:
            shuffle(pairings[emotion])
      Begin Routine:
        # Pick image for this trial
        imageFile = image_paths[trials.thisN]
        import random

        # Extract emotion from file path
        if 'happiness' in imageFile:
            target = 'happiness'
        elif 'sadness' in imageFile:
            target = 'sadness'
        elif 'anger' in imageFile:
            target = 'anger'
        elif 'fear' in imageFile:
            target = 'fear'

        # Possible emotions
        emotions = ['happiness', 'sadness', 'anger', 'fear']

        # Remove correct one to get foil options
        foils = [e for e in emotions if e != target]

        # Pick one random foil
        foil = pairings[target].pop()

        # Randomize left/right placement
        if random.random() < 0.5:
            leftWord = target
            rightWord = foil
            correctKey = 'left'
        else:
            leftWord = foil
            rightWord = target
            correctKey = 'right'
      End Routine:
        # Check if a response was made
        if key_resp.keys is None:
            accuracy = 0
        else:
            # Check if correct
            if key_resp.keys == correctKey:
                accuracy = 1
            else:
                accuracy = 0

        # Save data
        thisExp.addData('imageFile', imageFile)
        thisExp.addData('targetEmotion', target)
        thisExp.addData('leftWord', leftWord)
        thisExp.addData('rightWord', rightWord)
        thisExp.addData('correctKey', correctKey)
        thisExp.addData('response', key_resp.keys)
        thisExp.addData('accuracy', accuracy)
        thisExp.addData('rt', key_resp.rt)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $imageFile
      size = (0.5, 0.7)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    TextComponent LeftText
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 2.0
      text [set every repeat] = $leftWord
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    TextComponent RightText
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 2.0
      text [set every repeat] = $rightWord
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine instructions
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see a series of faces.

        After each face, two emotion words will appear.

        Press the LEFT arrow key for the word on the left.
        Press the RIGHT arrow key for the word on the right.

        Respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine thanks
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    TextComponent thankyou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating!
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 64
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    Routine trial
  LoopTerminator trials
  Routine thanks
